PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = lowagambling
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Routines
  Routine LOAD_DECKS
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        allCards = data.importConditions("conditions.xlsx")

        # default borrowed value and networth
        borrow = float(2000)
        net_worth = float(2000)


        # Store each card deck as seperate
        A_cards = list(filter(lambda x: x["DECK_NAME"] == "A", allCards))
        B_cards = list(filter(lambda x: x["DECK_NAME"] == "B", allCards))
        C_cards = list(filter(lambda x: x["DECK_NAME"] == "C", allCards))
        D_cards = list(filter(lambda x: x["DECK_NAME"] == "D", allCards))

        # Total number of trials
        totalReps = 100

        # image path
        img_0 = 'Resourse/no_card_left.png'
        img_1 = 'Resourse/deckback.png'

        # default image for each deck
        img_a = img_1
        img_b = img_1
        img_c = img_1
        img_d = img_1


        # Card select at each deck
        A_idx = 0
        B_idx = 0
        C_idx = 0
        D_idx = 0

        # Default text
        borrowed_text = "借款: {}".format(f'{borrow:.0f}')
        net_worth_text = "总收入: {}".format(f'{net_worth:.0f}')

        # Default allowed keys
        allowed_keys = ['1', '2', '3', '4']

        # initializating arguements
        current_card_property = dict()
        current_color = 0
        current_win = 0
        current_loss = 0
        respX = 0
  Routine TRIAL
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        net_worth = net_worth - float(current_loss) + float(current_win)

        borrowed_text = "借款: {}".format(f'{borrow:.0f}')
        net_worth_text = "总收入: {}".format(f'{net_worth:.0f}')
    ImageComponent deck_a
      image [set every repeat] = $img_a
      pos = (-0.5, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent deck_b
      image [set every repeat] = $img_b
      pos = (-0.17, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent deck_c
      image [set every repeat] = $img_c
      pos = (0.17, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent deck_d
      image [set every repeat] = $img_d
      pos = (0.5, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp
      allowedKeys [set every repeat] = allowed_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_a
      font = Microsoft yahei
      letterHeight = 0.05
      pos = (-0.5, 0.20)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent text_b
      font = Microsoft yahei
      letterHeight = 0.05
      pos = (-0.17, 0.20)
      startVal [time (s)] = 0.0
      text = B
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    TextComponent text_c
      font = Microsoft yahei
      letterHeight = 0.05
      pos = (0.17, 0.20)
      startVal [time (s)] = 0.0
      text = C
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    TextComponent text_d
      letterHeight = 0.05
      pos = (0.5, 0.20)
      startVal [time (s)] = 0.0
      text = D
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    TextComponent borrow_value
      font = Microsoft yahei
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $borrowed_text
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    TextComponent net_worth_value
      font = Microsoft yahei
      letterHeight = 0.05
      pos = (0, 0.40)
      startVal [time (s)] = 0.0
      text [set every repeat] = $net_worth_text
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  Routine FEEDBACK
    CodeComponent code_feedback
      Code Type = Auto->JS
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      Begin Routine:
        # initializating arguements
        current_card_property = dict()
        current_color = []
        current_win = []
        current_loss = []
        respX = 0

        # chose which deck
        if resp.keys[0] == '1':
            current_card_property = dict(A_cards[A_idx])
            respX = -0.5

            if A_idx == 39:
                img_a = img_0 # set the image to non_exist
                allowed_keys.remove('1') # remove the allowed key for preventing bug
            else:
                A_idx += 1

        elif resp.keys[0] == '2':
            current_card_property = dict(B_cards[B_idx])
            respX = -0.17

            if B_idx == 39:
                img_b = img_0
                allowed_keys.remove('2')
            else:
                B_idx += 1

        elif resp.keys[0] == '3':
            current_card_property = dict(C_cards[C_idx])
            respX = 0.17

            if C_idx == 39:
                img_c = img_0
                allowed_keys.remove('3')
            else:
                C_idx += 1


        elif resp.keys[0] == '4':
            current_card_property = dict(D_cards[D_idx])
            respX = 0.5

            if D_idx == 39:
                img_d = img_0
                allowed_keys.remove('4')
            else:
                D_idx += 1

        current_color = current_card_property["COLOR"]
        current_win = current_card_property["EARNINGS"]
        current_loss = current_card_property["LOSSES"]




        feedback_text = "你赢了{}元, 但是你输了{}元". format(current_win, current_loss)

        if net_worth <= 0:
            countinueRountine = False
    ImageComponent deck_a_feedback
      image [set every repeat] = $img_a
      pos = (-0.5, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent deck_b_feedback
      image [set every repeat] = $img_b
      pos = (-0.17, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent deck_c_feedback
      image [set every repeat] = $img_c
      pos = (0.17, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent deck_d_feedback
      image [set every repeat] = $img_d
      pos = (0.5, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent chosen_card
      fillColor [set every repeat] = $current_color
      pos [set every repeat] = (respX, 0)
      shape = rectangle
      size = (0.25, 0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent text_a_feedback
      font = Microsoft yahei
      letterHeight = 0.05
      pos = (-0.5, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = A
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    TextComponent text_b_feedback
      font = Microsoft yahei
      letterHeight = 0.05
      pos = (-0.17, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = B
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    TextComponent text_c_feedback
      font = Microsoft yahei
      letterHeight = 0.05
      pos = (0.17, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = C
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    TextComponent text_d_feedback
      font = Microsoft yahei
      letterHeight = 0.05
      pos = (0.5, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = D
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    TextComponent borrow_value_feedback
      font = Microsoft yahei
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $borrowed_text
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    TextComponent net_worth_value_feedback
      font = Microsoft yahei
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $net_worth_text
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    TextComponent feedback_trial
      font = Microsoft yahei
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback_text
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  Routine END
    TextComponent thank_you
      font = Microsoft yahei
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 谢谢您参与本次实验
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  Routine INSTR
    TextComponent instrtext
      font = Microsoft yahei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加本次实验！
        在你面前的是四张牌，你的任务是
        抽取任意一张，翻牌后会获得相应
        的奖金，并加进你的2000元借款中，
        注意，有些时候，你也很会受到一
        定的罚金，将会从你获得的总收入
        中扣除。你的目的是获得尽可能多
        的收入。
        A,B,C,D对应着键盘的1，2，3，4

        <请按空格键继续>
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine LOAD_DECKS
  Routine INSTR
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = totalReps
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    Routine TRIAL
    Routine FEEDBACK
  LoopTerminator trials
  Routine END
